include "loca_mcse_first.pcl";

TTL_fix.present();

loop until (pulse_manager.main_pulse_count() == 1)  #remove this line if you the scanner trigger is not set up to send it sync
begin  #remove this line if you the scanner trigger is not set up to send it sync
end;  #remove this line if you the scanner trigger is not set up to send it sync


#t_cut.present();
baselinefix.present();

display_trial("onel_013.jpg",11);               
display_trial("onel_017.jpg",11);               
display_trial("oner_027.jpg",12);               
display_trial("onel_029.jpg",11);               
display_trial("onel_003.jpg",11);               
display_trial("onel_026.jpg",11);               
display_trial("onel_018.jpg",11);               
display_trial("oner_014.jpg",12);               
display_trial("onel_009.jpg",11);               
display_trial("onel_028.jpg",11);               

baselinefix.present() ;

display_trial("alll_012.jpg",61);               
display_trial("allr_005.jpg",62);               
display_trial("alll_017.jpg",61);               
display_trial("alll_003.jpg",61);               
display_trial("alll_020.jpg",61);               
display_trial("allr_009.jpg",62);               
display_trial("allr_029.jpg",62);               
display_trial("alll_027.jpg",61);               
display_trial("alll_010.jpg",61);               
display_trial("allr_027.jpg",62);               

baselinefix.present();

display_trial("onel_025.jpg",11);               
display_trial("onel_021.jpg",11);               
display_trial("onel_016.jpg",11);               
display_trial("oner_029.jpg",12);               
display_trial("onel_002.jpg",11);               
display_trial("onel_001.jpg",11);               
display_trial("onel_008.jpg",11);               
display_trial("oner_020.jpg",12);               
display_trial("onel_027.jpg",11);               
display_trial("oner_022.jpg",12);               

baselinefix.present();

display_trial("alll_018.jpg",61);               
display_trial("allr_025.jpg",62);               
display_trial("alll_005.jpg",61);               
display_trial("alll_001.jpg",61);               
display_trial("allr_017.jpg",62);               
display_trial("alll_024.jpg",61);               
display_trial("allr_016.jpg",62);               
display_trial("alll_011.jpg",61);               
display_trial("allr_012.jpg",62);               
display_trial("alll_013.jpg",61);               

baselinefix.present();

display_trial("oner_019.jpg",12);               
display_trial("onel_020.jpg",11);               
display_trial("onel_019.jpg",11);               
display_trial("oner_005.jpg",12);               
display_trial("oner_025.jpg",12);               
display_trial("oner_017.jpg",12);               
display_trial("oner_009.jpg",12);               
display_trial("oner_030.jpg",12);               
display_trial("oner_007.jpg",12);               

baselinefix.present();

display_trial("allr_023.jpg",62);               
display_trial("alll_004.jpg",61);               
display_trial("alll_006.jpg",61);               
display_trial("allr_020.jpg",62);               
display_trial("allr_024.jpg",62);               
display_trial("allr_010.jpg",62);               
display_trial("allr_022.jpg",62);               
display_trial("allr_026.jpg",62);               
display_trial("alll_009.jpg",61);               
display_trial("alll_008.jpg",61); 
              
baselinefix.present();
	






/*
loop
	int i_block = 1
until
	i_block > 8
begin
	
	loop
		int i = 1
	until
		i > 12
	begin
	
		i_tool = i_help[i];
		if (i_tool > 40) then
			s_file = "allt_" + string(i_tool - 40 + 3*(i_block-1)) + ".jpg";
		else
			if (i_tool > 30) then
				s_file = "allb_" + string(i_tool - 30 + 3*(i_block-1)) + ".jpg";
			else
				if (i_tool > 20) then
					s_file = "onet_" + string(i_tool - 20 + 3*(i_block-1)) + ".jpg";
				else
					if (i_tool > 10) then
						s_file = "oneb_" + string(i_tool - 10 + 3*(i_block-1)) + ".jpg";
					end;
				end;
			end;
		end;
	
		display_trial(s_file,ix_reaction_time);
		f_debug.print(string(i_tool) + " " + string(ix_reaction_time));
		f_debug.print("\n");
		i = i+1;
	end;


	i_block = i_block + 1;

end;

f_debug.close();

###############
# EXPLICATION #
###############

loop
	int i_block = 1
until
	i_block > 8
begin 
	
	> Nous avons ici une boucle, i_block, allant de 1 à 8. A l'intérieur de cette boucle, nous avons une autre boucle...
	
	i_help.shuffle();
	> fonction qui shuffle i_help càd va piocher ses éléments aléatoirement

	loop
		int i = 1
	until
		i > 12
	begin
		
		i_tool = i_help[i];

	> ... où i_help est un array de 12 éléments que nous allons utiliser l'un après l'autre.
	> Les éléments de i_help sont définis plus haut : array <int> i_help[12] = {11,12,13,21,22,23,31,32,33,41,42,43};
	> Ces éléments vont âtre appelés i_tool
	
	if (i_tool > 40) then
			s_file = "allt_" + string(i_tool - 40 + 3*(i_block-1)) + ".jpg";
		else

	> si i_tool est supérieur à 40, alors le nom du fichier à loader sera
	> allt , 41, 42 ou 43 - 40 + 3*0,1,2,3,4,5,6 ou 7.jpg
	> donc allt 1,2,3...24.jpg
	
			if (i_tool > 30) then
				s_file = "allb_" + string(i_tool - 30 + 3*(i_block-1)) + ".jpg";
			else

	> si i_tool est supérieur à 30, alors le nom du fichier à loader sera
	> allb , 31,32,33 - 30 + 3*0,1,2,3,4,5,6 ou 7.jpg
	> donc allb 1,2,3...24.jpg
	
	> cette ligne ne s'occupe pas de 41,42 et 43 car ces valeurs là sont déjà traités par le premier "if" et envoyés directement au "end"
	> donc, tous les nombres qui arrivent plus bas sont inférieurs à 40.
	> idem pour chaque étape
	
				if (i_tool > 20) then
					s_file = "onet_" + string(i_tool - 20 + 3*(i_block-1)) + ".jpg";
				else
				
	> idem
					if (i_tool > 10) then
						s_file = "oneb_" + string(i_tool - 10 + 3*(i_block-1)) + ".jpg";
					end;
				end;
			end;
	