include "loca_lec2_first.pcl";


t_cut.present();
display_trial("il",20);
display_trial("le",10);
display_trial("y",20);
display_trial("jardin",10);
display_trial("avait",20);
display_trial("était",10);
display_trial("dans",20);
display_trial("la",20);
display_trial("campagne",20);
display_trial("entouré",10);
display_trial("d'une",10);
display_trial("un",20);
display_trial("vieux",20);
display_trial("haie",10);
display_trial("manoir",20);
display_trial("et",20);
display_trial("dans",20);
display_trial("de",10);
display_trial("ce",20);
display_trial("manoir",20);
display_trial("noisetiers",10);
display_trial("sur",20);
display_trial("la",20);
display_trial("et",10);
display_trial("colline",20);
display_trial("audehors",10);
display_trial("s'étendaient",10);
display_trial("des",10);
display_trial("champs",10);
display_trial("un",20);
display_trial("vieux",20);
display_trial("et",10);
display_trial("des",10);
display_trial("seigneur",20);
display_trial("qui",20);
display_trial("avait",20);
display_trial("deux",20);
display_trial("prés",10);
display_trial("au",10);
display_trial("milieu",10);
display_trial("du",10);
display_trial("fils",20);
display_trial("si",20);
display_trial("jardin",10);
display_trial("pleins",20);
display_trial("d'esprit",20);
display_trial("qu'avec",20);
display_trial("la",20);
display_trial("fleurissait",10);
display_trial("un",10);
display_trial("rosier",10);
display_trial("et",10);
display_trial("moitié",20);
display_trial("sous",10);
display_trial("le",10);
display_trial("rosier",10);
display_trial("ils",20);
display_trial("vivait",10);
display_trial("un",10);
display_trial("escargot",10);
display_trial("en",20);
display_trial("auraient",20);
display_trial("déjà",20);
display_trial("eu",20);
display_trial("attendez",10);
display_trial("un",10);
display_trial("assez",20);
display_trial("peu",10);
display_trial("que",10);
display_trial("mon",10);
display_trial("ils",20);
display_trial("voulaient",20);
display_trial("demander",20);
display_trial("temps",10);
display_trial("arrive",10);
display_trial("la",20);
display_trial("main",20);
display_trial("de",20);
display_trial("la",20);
display_trial("disait-il",10);
display_trial("fille",20);
display_trial("je",10);
display_trial("du",20);
display_trial("ferai",10);
display_trial("roi",20);
display_trial("des",10);
display_trial("mais",20);
display_trial("choses",10);
display_trial("ils",20);
display_trial("n'osaient",20);
display_trial("pas",20);
display_trial("bien",10);
display_trial("plus",10);
display_trial("car",20);
display_trial("elle",20);
display_trial("grandioses",10);
display_trial("avait",20);
display_trial("que",10);
display_trial("de",10);
display_trial("fleurir",10);
display_trial("fait",20);
display_trial("porter",10);
display_trial("des",10);
display_trial("savoir",20);
display_trial("qu'elle",20);
display_trial("noisettes",10);
display_trial("ou",10);
display_trial("donner",10);
display_trial("épouserait",20);
display_trial("du",10);
display_trial("celui",20);
display_trial("qui",20);
display_trial("lait",10);
display_trial("saurait",20);
display_trial("comme",10);
display_trial("le",20);
display_trial("mieux",20);
display_trial("des",10);
display_trial("plaider",20);
display_trial("vaches",10);
display_trial("et",10);
display_trial("des",10);
display_trial("sa",20);
display_trial("cause",20);
display_trial("les",20);
display_trial("moutons",10);
display_trial("a",10);
display_trial("vrai",10);
display_trial("dire",10);
display_trial("deux",20);
display_trial("garçons",20);
display_trial("se",20);
display_trial("préparèrent",20);
display_trial("j'attends",10);
display_trial("pendant",20);
display_trial("de",10);
display_trial("huit",20);
display_trial("vous",10);
display_trial("de",10);
display_trial("jours",20);
display_trial("grandes",10);
display_trial("ils",20);
display_trial("choses",10);
display_trial("n'avaient",20);
display_trial("pas",20);
display_trial("plus",20);
display_trial("de",20);
display_trial("approuva",10);
display_trial("le",10);
display_trial("rosier",10);
display_trial("mais",10);
display_trial("temps",20);
display_trial("puis-je",10);
display_trial("devant",20);
display_trial("vous",10);
display_trial("eux",20);
display_trial("mais",20);
display_trial("demander",10);
display_trial("c'était",20);
display_trial("quand",10);
display_trial("suffisant",20);
display_trial("car",20);
display_trial("les",10);
display_trial("ils",20);
display_trial("ferez-vous",10);
display_trial("je",10);
display_trial("avaient",20);
display_trial("prends",10);
display_trial("mon",10);
display_trial("temps",10);
display_trial("des",20);
display_trial("connaissances",20);
display_trial("répondit",10);
display_trial("l'escargot",10);
display_trial("préalables",20);
display_trial("vous",10);
display_trial("êtes",10);
display_trial("toujours",10);
display_trial("pressé",10);
display_trial("fort",20);
display_trial("utiles",20);
display_trial("attendre",10);
display_trial("l'un",20);
display_trial("est",10);
display_trial("plus",10);
display_trial("excitant",10);
display_trial("savait",20);
display_trial("par",20);
display_trial("un",10);
display_trial("an",10);
display_trial("cœur",20);
display_trial("plus",10);
display_trial("tout",20);
display_trial("tard",10);
display_trial("le",20);
display_trial("l'escargot",10);
display_trial("lexique",20);
display_trial("latin",20);
display_trial("et",20);
display_trial("était",10);
display_trial("presque",10);
display_trial("trois",20);
display_trial("au",10);
display_trial("années",20);
display_trial("complètes",20);
display_trial("même",10);
display_trial("du",20);
display_trial("endroit",10);
display_trial("journal",20);
display_trial("sous",10);
display_trial("du",20);
display_trial("le",10);
display_trial("pays",20);
display_trial("rosier",10);
display_trial("et",20);
display_trial("et",10);
display_trial("se",10);
display_trial("réchauffait",10);
display_trial("cela",20);
display_trial("en",20);
display_trial("au",10);
display_trial("commençant",20);
display_trial("soleil",10);
display_trial("le",10);
display_trial("rosier",10);
display_trial("par",20);
display_trial("le",20);
display_trial("eut",10);
display_trial("commencement",20);
display_trial("ou",20);
display_trial("beaucoup",10);
display_trial("en",20);
display_trial("commençant",20);
display_trial("de",10);
display_trial("par",20);
display_trial("la",20);
display_trial("boutons",10);
display_trial("fin",20);
display_trial("cette",10);
display_trial("l'autre",20);
display_trial("avait",20);
display_trial("année-là",10);
display_trial("étudié",20);
display_trial("qui",10);
display_trial("devinrent",10);
display_trial("les",20);
display_trial("des",10);
display_trial("statuts",20);
display_trial("fleurs",10);
display_trial("de",20);
display_trial("toutes",20);
display_trial("toujours",10);
display_trial("les",20);
display_trial("corporations",20);
display_trial("et",20);
display_trial("appris",20);
display_trial("fraîches",10);
display_trial("tout",20);
display_trial("et",10);
display_trial("toujours",10);
display_trial("ce",20);
display_trial("que",20);
display_trial("devait",20);
display_trial("nouvelles",10);
display_trial("connaître",20);
display_trial("l'escargot",10);
display_trial("un",20);
display_trial("s'avança",10);
display_trial("maître",20);
display_trial("juré",20);
display_trial("tout",10);
display_trial("il",20);
display_trial("pensait",20);
display_trial("est",10);
display_trial("pouvoir",20);
display_trial("exactement",10);
display_trial("comme",10);
display_trial("l'année",10);
display_trial("dernière",10);
display_trial("discuter",20);
display_trial("aucun",10);
display_trial("de",20);
display_trial("progrès",10);
display_trial("nulle",10);
display_trial("part",10);
display_trial("le",10);
display_trial("l'état",20);
display_trial("rosier",10);
display_trial("a",10);
display_trial("toujours",10);
display_trial("et",20);
display_trial("de",20);
display_trial("ses",10);
display_trial("plus",20);
display_trial("il",20);
display_trial("savait",20);
display_trial("roses",10);
display_trial("cela",10);
display_trial("ne",10);
display_trial("va",10);
display_trial("broder",20);
display_trial("pas",10);
display_trial("plus",10);
display_trial("loin",10);
display_trial("l'été",10);
display_trial("car",20);
display_trial("il",20);
display_trial("passa",10);
display_trial("était",20);
display_trial("adroit",20);
display_trial("de",20);
display_trial("et",10);
display_trial("le",10);
display_trial("ses",20);
display_trial("mains",20);
display_trial("leur",20);
display_trial("père",20);
display_trial("rosier",10);
display_trial("avait",10);
display_trial("toujours",10);
display_trial("ses",10);
display_trial("donna",20);
display_trial("à",20);
display_trial("boutons",10);
display_trial("et",10);
display_trial("chacun",20);
display_trial("ses",10);
display_trial("fleurs",10);
display_trial("d'eux",20);
display_trial("un",20);
display_trial("et",10);
display_trial("beau",20);
display_trial("cheval",20);
display_trial("noir",20);
display_trial("il",10);
display_trial("comme",20);
display_trial("le",20);
display_trial("en",10);
display_trial("charbon",20);
display_trial("pour",20);
display_trial("eut",10);
display_trial("celui",20);
display_trial("jusqu'à",10);
display_trial("la",10);
display_trial("à",20);
display_trial("première",10);
display_trial("la",20);
display_trial("mémoire",20);
display_trial("neige",10);
display_trial("le",10);
display_trial("temps",10);
display_trial("impeccable",20);
display_trial("devient",10);
display_trial("froid",10);
display_trial("et",10);
display_trial("pluvieux",10);
display_trial("blanc",20);
display_trial("comme",20);
display_trial("le",10);
display_trial("rosier",10);
display_trial("se",10);
display_trial("pencha",10);
display_trial("neige",20);
display_trial("pour",20);
display_trial("le",20);
display_trial("maître",20);
display_trial("vers",10);
display_trial("en",20);
display_trial("le",10);
display_trial("sol",10);
display_trial("sciences",20);
display_trial("et",10);
display_trial("puis",20);
display_trial("ils",20);
display_trial("se",20);
display_trial("graissèrent",20);
display_trial("l'escargot",10);
display_trial("se",10);
display_trial("les",20);
display_trial("lèvres",20);
display_trial("cacha",10);
display_trial("vite",10);
display_trial("sous",10);
display_trial("avec",20);
display_trial("de",20);
display_trial("la",10);
display_trial("terre",10);
display_trial("l'huile",20);
display_trial("pour",20);
display_trial("rendre",20);
display_trial("puis",10);
display_trial("enfin",10);
display_trial("leur",20);
display_trial("parole",20);
display_trial("une",10);
display_trial("plus",20);
display_trial("fluide",20);
display_trial("nouvelle",10);
display_trial("année",10);
display_trial("commença",10);

