include "loca_visu_first.pcl";

loop until (pulse_manager.main_pulse_count() == 3)  #remove this line if you the scanner trigger is not set up to send it sync
begin  #remove this line if you the scanner trigger is not set up to send it sync
end;

####
#                     code
# V = visage           20
# H = house            10
# T = tool             50
# AA = animal          30
# SCEE = scene         40
# hgfjh = characters   70
# tambulo = pseudoword 60
# F = target fruit     80
# SCR = scrambled      90
# pauses 500ms         100


t_cut.present();

#84*5=420 --- 420/2=210 --- 210/5=42

##########
# BLOC 1 #
##########
#1
#baselinefix.present();
display_trial( "AA42", 30);
display_trial( "bldkjq", 70);
display_trial( "F01", 80);##########"
display_trial( "bulade", 60);
display_trial( "V12", 20);


#2
#baselinefix.present();
display_trial( "H21", 10);
display_trial( "SCEE23", 40);
display_trial( "AA17", 30);
display_trial( "SCR01", 90);
display_trial( "T27", 50);


#3
#baselinefix.present();
display_trial( "SCR02", 90);
display_trial( "SCEE22", 40);
display_trial( "pammose", 60);
display_trial( "pngbth", 70);
display_trial( "V21", 20);


#4
#baselinefix.present();
display_trial( "AA46", 30);
display_trial( "SCEE47", 40);
display_trial( "trutoner", 60);
display_trial( "H39", 10);
display_trial( "kjlpsqhg", 70);


#5
#baselinefix.present();
display_trial( "T28", 50);
display_trial( "SCR03", 90);
display_trial( "qztvcw", 70);
display_trial( "AA20", 30);
display_trial( "sarvect", 60);


#6
#baselinefix.present();
display_trial( "H50", 10);
display_trial( "SCEE36", 40);
display_trial( "V29", 20);
display_trial( "SCR04", 90);
display_trial( "SCEE01", 40);


#7
#baselinefix.present();
display_trial( "T36", 50);
display_trial( "bulilu", 60);
display_trial( "AA38", 30);
display_trial( "blklhlnb", 70);
display_trial( "V23", 20);


#8
#baselinefix.present();
display_trial( "chovutte", 60);
display_trial( "SCEE02", 40);
display_trial( "F02", 80);##########"
display_trial( "H30", 10);
display_trial( "SCR05", 90);


#9
#baselinefix.present();
display_trial( "V50", 20);
display_trial( "T29", 50);

##########
# BLOC 2 #
##########
baselinefix.present();
display_trial( "trasbof", 60);
display_trial( "SCEE07", 40);
display_trial( "H35", 10);


#10
#baselinefix.present();
display_trial( "AA37", 30);
display_trial( "V10", 20);
display_trial( "dcsxkn", 70);
display_trial( "F03", 80);##############
display_trial( "SCR06", 90);


#11
#baselinefix.present();
display_trial( "trtplss", 70);
display_trial( "T12", 50);
display_trial( "SCR07", 90);
display_trial( "V35", 20);
display_trial( "AA18", 30);


#12
#baselinefix.present();
display_trial( "H41", 10);
display_trial( "T47", 50);
display_trial( "SCR08", 90);
display_trial( "AA09", 30);
display_trial( "V06", 20);


#13
#baselinefix.present();
display_trial( "speroze", 60);
display_trial( "H46", 10);
display_trial( "SCEE30", 40);
display_trial( "SCR09", 90);
display_trial( "V31", 20);


#14
#baselinefix.present();
display_trial( "T10", 50);
display_trial( "SCEE50", 40);
display_trial( "AA10", 30);
display_trial( "SCR10", 90);
display_trial( "spbmklrt", 70);


#15
#baselinefix.present();
display_trial( "piquilot", 60);
display_trial( "dfgkpz", 70);
display_trial( "SCR11", 90);
display_trial( "AA16", 30);
display_trial( "SCEE21", 40);


#16
#baselinefix.present();
display_trial( "T14", 50);
display_trial( "SCR12", 90);
display_trial( "F04", 80);##############
display_trial( "H23", 10);
display_trial( "AA28", 30);


#17
#baselinefix.present();
display_trial( "T06", 50);
display_trial( "SCR13", 90);
display_trial( "F05", 80);##############
display_trial( "V38", 20);

##########
# BLOC 3 #
##########
baselinefix.present();
display_trial( "SCEE08", 40);


#18
#baselinefix.present();
display_trial( "V46", 20);
display_trial( "SCR14", 90);
display_trial( "veunip", 60);
display_trial( "H01", 10);
display_trial( "vgsdrtp", 70);


#19
#baselinefix.present();
display_trial( "SCR15", 90);
display_trial( "T31", 50);
display_trial( "SCEE19", 40);
display_trial( "H08", 10);
display_trial( "AA45", 30);


#20
#baselinefix.present();
display_trial( "pistuno", 60);
display_trial( "V09", 20);
display_trial( "SCR16", 90);
display_trial( "hlatou", 60);
display_trial( "F02", 80);##############


#21
#baselinefix.present();
display_trial( "AA35", 30);
display_trial( "T48", 50);
display_trial( "H20", 10);
display_trial( "SCR17", 90);
display_trial( "hjfgklv", 70);


#22
#baselinefix.present();
display_trial( "T43", 50);
display_trial( "AA47", 30);
display_trial( "V48", 20);
display_trial( "H04", 10);
display_trial( "SCEE29", 40);


#23
#baselinefix.present();
display_trial( "F03", 80);########
display_trial( "pansitu", 60);
display_trial( "SCEE14", 40);
display_trial( "SCR18", 90);
display_trial( "AA25", 30);


#24
#baselinefix.present();
display_trial( "V13", 20);
display_trial( "T46", 50);
display_trial( "cvwxbn", 70);
display_trial( "H43", 10);
display_trial( "SCR19", 90);


#25
#baselinefix.present();
display_trial( "V22", 20);
display_trial( "nourasit", 60);
display_trial( "SCR20", 90);
display_trial( "AA05", 30);
display_trial( "H17", 10);


#26
#baselinefix.present();
display_trial( "SCEE32", 40);

##########
# BLOC 4 #
##########
baselinefix.present();
display_trial( "V24", 20);
display_trial( "tfqpxs", 70);
display_trial( "cassonu", 60);
display_trial( "H13", 10);


#27
#baselinefix.present();
display_trial( "AA22", 30);
display_trial( "SCEE17", 40);
display_trial( "T04", 50);
display_trial( "V04", 20);
display_trial( "lskdjf", 70);


#28
#baselinefix.present();
display_trial( "T16", 50);
display_trial( "F04", 80);########
display_trial( "AA23", 30);
display_trial( "boutale", 60);
display_trial( "H31", 10);


#29
#baselinefix.present();
display_trial( "parum", 60);
display_trial( "msldkcsw", 70);
display_trial( "H32", 10);
display_trial( "SCR21", 90);
display_trial( "SCEE05", 40);


#30
#baselinefix.present();
display_trial( "F05", 80);########
display_trial( "T07", 50);
display_trial( "H33", 10);
display_trial( "V39", 20);
display_trial( "chempan", 60);


#31
#baselinefix.present();
display_trial( "pztrgv", 70);
display_trial( "T37", 50);
display_trial( "AA32", 30);
display_trial( "SCEE06", 40);
display_trial( "SCR22", 90);


#32
#baselinefix.present();
display_trial( "AA07", 30);
display_trial( "T44", 50);
display_trial( "H26", 10);
display_trial( "SCEE43", 40);
display_trial( "njpkmtd", 70);


#33
#baselinefix.present();
display_trial( "V20", 20);
display_trial( "SCEE03", 40);
display_trial( "SCR23", 90);
display_trial( "bonsug", 60);
display_trial( "tgbcvjqsd", 70);


#34
#baselinefix.present();
display_trial( "AA50", 30);
display_trial( "H38", 10);
display_trial( "T09", 50);


##########
# BLOC 5 #
##########
baselinefix.present();
display_trial( "SCEE31", 40);
display_trial( "vasifon", 60);


#35
#baselinefix.present();
display_trial( "T26", 50);
display_trial( "H49", 10);
display_trial( "SCR24", 90);
display_trial( "H05", 10);
display_trial( "mlkjhg", 70);


#36
#baselinefix.present();
display_trial( "sdvxcvb", 70);
display_trial( "armulain", 60);
display_trial( "AA11", 30);
display_trial( "SCEE11", 40);
display_trial( "F03", 80);########


#37
#baselinefix.present();
display_trial( "T50", 50);
display_trial( "H14", 10);
display_trial( "SCEE25", 40);
display_trial( "V27", 20);
display_trial( "SCR25", 90);


#38
#baselinefix.present();
display_trial( "stabeu", 60);
display_trial( "AA33", 30);
display_trial( "jnhgtd", 70);
display_trial( "T17", 50);
display_trial( "H12", 10);


#39
#baselinefix.present();
display_trial( "SCEE48", 40);
display_trial( "V32", 20);
display_trial( "T33", 50);
display_trial( "rtpxrgn", 70);
display_trial( "AA04", 30);


#40
#baselinefix.present();
display_trial( "camilu", 60);
display_trial( "V36", 20);
display_trial( "H10", 10);
display_trial( "SCR26", 90);
display_trial( "nqnsxnd", 70);


#41
#baselinefix.present();
display_trial( "T11", 50);
display_trial( "AA03", 30);
display_trial( "SCR27", 90);
display_trial( "SCEE27", 40);
display_trial( "V11", 20);


#42
#baselinefix.present();
display_trial( "martobi", 60);
display_trial( "T08", 50);
display_trial( "AA27", 30);
display_trial( "lrltpl", 70);
display_trial( "raquelor", 60);

